PsychoPy2experiment version="2026.1.0"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001', 'Age': ''}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Use version = 2024.2.4
  Window size (pixels) = [1536, 864]
  color = 1.0000, 1.0000, 1.0000
  expName = untitled
  keyboardBackend = ioHub
  runMode = 0
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Routines
  Routine Space
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    PolygonComponent instruct_Background
      fillColor = white
      shape = rectangle
      size = (2, 2)
      startVal [time (s)] = 0.0
      units = norm
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    ImageComponent Space_
      image = Space.png
      size = (1,1)
      startVal [time (s)] = 0.0
      units = norm
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    KeyboardComponent Space_Key
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine FC
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    TextComponent Fix_Cross_1
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.4
      startVal [time (s)] = 00
      stopVal [duration (s)] = 1.0
      syncScreenRefresh = False
      text [set every repeat] = +
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  Routine PracticeTrial
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    CodeComponent Time_reset
      Code Type = Auto->JS
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      Begin Routine:
        frameTolerance = 0.016

        def start_routine():
            routineTimer.reset()
    CodeComponent code_mouse_Visible
      Code Type = Auto->JS
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      Begin Routine:
        win.mouseVisible = True
      End Routine:
        mouse_resp_2.setPos([0.6, 0])
        win.mouseVisible = False
    PolygonComponent intervals_Background
      fillColor = white
      shape = rectangle
      size = (2, 2)
      startVal [time (s)] = 0.0
      units = norm
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    ImageComponent num1
      image [set every repeat] = $cue1
      pos = (0.1, 0.3)
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
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    ImageComponent num2
      image [set every repeat] = $cue2
      pos = (-0.25, 0.3)
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
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    ImageComponent num3
      image [set every repeat] = $cue3
      pos = (-0.6, 0.3)
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
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    ImageComponent num4
      image [set every repeat] = $cue4
      pos = (0.1, 0)
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
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    ImageComponent num5
      image [set every repeat] = $cue5
      pos = (-0.25, 0)
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
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    ImageComponent num6
      image [set every repeat] = $cue6
      pos = (-0.6, 0)
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
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    ImageComponent num7
      image [set every repeat] = $cue7
      pos = (0.1, -0.3)
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
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    ImageComponent num8
      image [set every repeat] = $cue8
      pos = (-0.25, -0.3)
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
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    ImageComponent num9
      image [set every repeat] = $cue9
      pos = (-0.6, -0.3)
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
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    ImageComponent Target
      image [set every repeat] = $cue10
      pos = (0.6, 0)
      size = (0.35, 0.35)
      startVal [time (s)] = 0.0
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    MouseComponent mouse_resp
      clickable = num1, num2, num3, num4, num5, num6, num7, num8, num9
      forceEndRoutineOnPress = never
      saveMouseState = on click
      saveParamsClickable = image
      startVal [time (s)] = 0.0
      syncScreenRefresh = True
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    CodeComponent Fb_Code
      Code Type = Py
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      Begin Routine:
        # Initialize feedback text
        feedback_text = ""
      Each Frame:
        # Initialize clicked_image
        clicked_image = None

        # Check for mouse clicks
        if mouse_resp.getPressed()[0]:  # Check if the left mouse button is pressed
            # Check each image component for clicks
            if mouse_resp.isPressedIn(num1):
                clicked_image = cue1  # Get the path of the clicked image
            elif mouse_resp.isPressedIn(num2):
                clicked_image = cue2
            elif mouse_resp.isPressedIn(num3):
                clicked_image = cue3
            elif mouse_resp.isPressedIn(num4):
                clicked_image = cue4
            elif mouse_resp.isPressedIn(num5):
                clicked_image = cue5
            elif mouse_resp.isPressedIn(num6):
                clicked_image = cue6
            elif mouse_resp.isPressedIn(num7):
                clicked_image = cue7
            elif mouse_resp.isPressedIn(num8):
                clicked_image = cue8
            elif mouse_resp.isPressedIn(num9):
                clicked_image = cue9

            # Provide feedback based on the clicked image
            if clicked_image is not None:
                # Get the correct response from the Practice file
                correct_response = str(cor_resp)  # This should be the full path to the correct image
                if clicked_image == correct_response:
                    feedback_text = "Correct!"
                else:
                    feedback_text = "Incorrect!"

                continueRoutine = False  # End the routine after a response
  Routine feedback
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    PolygonComponent Fb_Background
      fillColor = white
      shape = rectangle
      size = (2, 2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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    TextComponent feedback_Text
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text [set every repeat] = $feedback_text
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  Routine Routine_1
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    CodeComponent Time_reset_2
      Code Type = Auto->JS
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      Begin Routine:
        routineTimer.reset()
    CodeComponent code_2
      Code Type = Auto->JS
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      Begin Routine:
        click_result = ""
      Each Frame:
        clicked_image = None

        if mouse_resp_2.getPressed()[0]:
            if mouse_resp_2.isPressedIn(num1):
                clicked_image = cue1
            elif mouse_resp_2.isPressedIn(num2):
                clicked_image = cue2
            elif mouse_resp_2.isPressedIn(num3):
                clicked_image = cue3
            elif mouse_resp_2.isPressedIn(num4):
                clicked_image = cue4
            elif mouse_resp_2.isPressedIn(num5):
                clicked_image = cue5
            elif mouse_resp_2.isPressedIn(num6):
                clicked_image = cue6
            elif mouse_resp_2.isPressedIn(num7):
                clicked_image = cue7
            elif mouse_resp_2.isPressedIn(num8):
                clicked_image = cue8
            elif mouse_resp_2.isPressedIn(num9):
                clicked_image = cue9


            if clicked_image is not None:

                click_result = (clicked_image == str(cor_resp))
      End Routine:
        thisExp.addData('click_result', click_result)
    CodeComponent code_mouse_Visible_2
      Code Type = Auto->JS
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      Begin Routine:
        win.mouseVisible = True
      End Routine:
        mouse_resp_2.setPos([0.6, 0])
        win.mouseVisible = False
    PolygonComponent Routine_1_Background
      fillColor = white
      shape = rectangle
      size = (2, 2)
      startVal [time (s)] = 0.0
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    ImageComponent num_1
      image [set every repeat] = $cue1
      pos = (0.1, 0.3)
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
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    ImageComponent num_2
      image [set every repeat] = $cue2
      pos = (-0.25, 0.3)
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
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    ImageComponent num_3
      image [set every repeat] = $cue3
      pos = (-0.6, 0.3)
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
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    ImageComponent num_4
      image [set every repeat] = $cue4
      pos = (0.1, 0)
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
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    ImageComponent num_5
      image [set every repeat] = $cue5
      pos = (-0.25, 0)
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
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    ImageComponent num_6
      image [set every repeat] = $cue6
      pos = (-0.6, 0)
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
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    ImageComponent num_7
      image [set every repeat] = $cue7
      pos = (0.1, -0.3)
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
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    ImageComponent num_8
      image [set every repeat] = $cue8
      pos = (-0.25, -0.3)
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
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    ImageComponent num_9
      image [set every repeat] = $cue9
      pos = (-0.6, -0.3)
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
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    ImageComponent Target_1
      image [set every repeat] = $cue10
      pos = (0.6, 0)
      size = (0.35, 0.35)
      startVal [time (s)] = 0.0
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    MouseComponent mouse_resp_2
      clickable = num_1, num_2, num_3, num_4, num_5, num_6, num_7, num_8, num_9
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      saveParamsClickable = image
      startVal [time (s)] = 0.0
      syncScreenRefresh = True
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  Routine Routine_2
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    CodeComponent Time_reset_3
      Code Type = Auto->JS
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      Begin Routine:
        routineTimer.reset()
    CodeComponent code_3
      Code Type = Auto->JS
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      Begin Routine:
        click_result = ""
      Each Frame:
        clicked_image = None


        if mouse_resp_3.getPressed()[0]:

            if mouse_resp_3.isPressedIn(num1):
                clicked_image = cue1
            elif mouse_resp_3.isPressedIn(num2):
                clicked_image = cue2
            elif mouse_resp_3.isPressedIn(num3):
                clicked_image = cue3
            elif mouse_resp_3.isPressedIn(num4):
                clicked_image = cue4
            elif mouse_resp_3.isPressedIn(num5):
                clicked_image = cue5
            elif mouse_resp_3.isPressedIn(num6):
                clicked_image = cue6
            elif mouse_resp_3.isPressedIn(num7):
                clicked_image = cue7
            elif mouse_resp_3.isPressedIn(num8):
                clicked_image = cue8
            elif mouse_resp_3.isPressedIn(num9):
                clicked_image = cue9


            if clicked_image is not None:

                click_result = (clicked_image == str(cor_resp))


                continueRoutine = False
      End Routine:
        # Store the click result in the data file
        thisExp.addData('click_result', click_result)  # This will store True or False
    CodeComponent code_mouse_Visible_3
      Code Type = Auto->JS
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      Begin Routine:
        win.mouseVisible = True
      End Routine:
        mouse_resp_2.setPos([0.6, 0])
        win.mouseVisible = False
    PolygonComponent Routine_2_Background
      fillColor = white
      shape = rectangle
      size = (2, 2)
      startVal [time (s)] = 0.0
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    ImageComponent numb1
      image [set every repeat] = $cue1
      pos = (0.1, 0.3)
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
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    ImageComponent numb2
      image [set every repeat] = $cue2
      pos = (-0.25, 0.3)
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
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    ImageComponent numb3
      image [set every repeat] = $cue3
      pos = (-0.6, 0.3)
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
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    ImageComponent numb4
      image [set every repeat] = $cue4
      pos = (0.1, 0)
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
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    ImageComponent numb5
      image [set every repeat] = $cue5
      pos = (-0.25, 0)
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
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    ImageComponent numb6
      image [set every repeat] = $cue6
      pos = (-0.6, 0)
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
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    ImageComponent numb7
      image [set every repeat] = $cue7
      pos = (0.1, -0.3)
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
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    ImageComponent numb8
      image [set every repeat] = $cue8
      pos = (-0.25, -0.3)
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
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    ImageComponent numb9
      image [set every repeat] = $cue9
      pos = (-0.6, -0.3)
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
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    ImageComponent Target_2
      image [set every repeat] = $cue10
      pos = (0.6, 0)
      size = (0.35, 0.35)
      startVal [time (s)] = 0.0
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    MouseComponent mouse_resp_3
      clickable = numb1, numb2, numb3, numb4, numb5, numb6, numb7, numb8, numb9
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      saveParamsClickable = image
      startVal [time (s)] = 0.0
      syncScreenRefresh = True
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  Routine Routine_3
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    CodeComponent Time_reset_4
      Code Type = Auto->JS
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      Begin Routine:
        routineTimer.reset()
    CodeComponent code_4
      Code Type = Auto->JS
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      Begin Routine:
        click_result = ""
      Each Frame:
        clicked_image = None

        if mouse_resp_4.getPressed()[0]:
            if mouse_resp_4.isPressedIn(num1):
                clicked_image = cue1
            elif mouse_resp_4.isPressedIn(num2):
                clicked_image = cue2
            elif mouse_resp_4.isPressedIn(num3):
                clicked_image = cue3
            elif mouse_resp_4.isPressedIn(num4):
                clicked_image = cue4
            elif mouse_resp_4.isPressedIn(num5):
                clicked_image = cue5
            elif mouse_resp_4.isPressedIn(num6):
                clicked_image = cue6
            elif mouse_resp_4.isPressedIn(num7):
                clicked_image = cue7
            elif mouse_resp_4.isPressedIn(num8):
                clicked_image = cue8
            elif mouse_resp_4.isPressedIn(num9):
                clicked_image = cue9


            if clicked_image is not None:

                click_result = (clicked_image == str(cor_resp))  # True if correct, False if incorrect


                continueRoutine = False
      End Routine:
        thisExp.addData('click_result', click_result)
    CodeComponent code_mouse_Visible_4
      Code Type = Auto->JS
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      Begin Routine:
        win.mouseVisible = True
      End Routine:
        mouse_resp_2.setPos([0.6, 0])
        win.mouseVisible = False
    PolygonComponent Routine_3_Background
      fillColor = white
      shape = rectangle
      size = (2, 2)
      startVal [time (s)] = 0.0
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    ImageComponent nu1
      image [set every repeat] = $cue1
      pos = (0.1, 0.3)
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
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    ImageComponent nu2
      image [set every repeat] = $cue2
      pos = (-0.25, 0.3)
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
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    ImageComponent nu3
      image [set every repeat] = $cue3
      pos = (-0.6, 0.3)
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
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    ImageComponent nu4
      image [set every repeat] = $cue4
      pos = (0.1, 0)
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
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    ImageComponent nu5
      image [set every repeat] = $cue5
      pos = (-0.25, 0)
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
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    ImageComponent nu6
      image [set every repeat] = $cue6
      pos = (-0.6, 0)
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
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    ImageComponent nu7
      image [set every repeat] = $cue7
      pos = (0.1, -0.3)
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
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    ImageComponent nu8
      image [set every repeat] = $cue8
      pos = (-0.25, -0.3)
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
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    ImageComponent nu9
      image [set every repeat] = $cue9
      pos = (-0.6, -0.3)
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
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    ImageComponent Target_3
      image [set every repeat] = $cue10
      pos = (0.6, 0)
      size = (0.35, 0.35)
      startVal [time (s)] = 0.0
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    MouseComponent mouse_resp_4
      clickable = nu1, nu2, nu3, nu4, nu5, nu6, nu7, nu8, nu9
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      saveParamsClickable = image
      startVal [time (s)] = 0.0
      syncScreenRefresh = True
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  Routine Routine_4
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    CodeComponent Time_reset_5
      Code Type = Auto->JS
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      Begin Routine:
        routineTimer.reset()
    CodeComponent code_mouse_Visible_5
      Code Type = Auto->JS
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      Begin Routine:
        win.mouseVisible = True
      End Routine:
        mouse_resp_2.setPos([0.6, 0])
        win.mouseVisible = False
    CodeComponent code_5
      Code Type = Auto->JS
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      Begin Routine:
        click_result = ""
      Each Frame:
        clicked_image = None

        if mouse_resp_5.getPressed()[0]:
            if mouse_resp_5.isPressedIn(num1):
                clicked_image = cue1
            elif mouse_resp_5.isPressedIn(num2):
                clicked_image = cue2
            elif mouse_resp_5.isPressedIn(num3):
                clicked_image = cue3
            elif mouse_resp_5.isPressedIn(num4):
                clicked_image = cue4
            elif mouse_resp_5.isPressedIn(num5):
                clicked_image = cue5
            elif mouse_resp_5.isPressedIn(num6):
                clicked_image = cue6
            elif mouse_resp_5.isPressedIn(num7):
                clicked_image = cue7
            elif mouse_resp_5.isPressedIn(num8):
                clicked_image = cue8
            elif mouse_resp_5.isPressedIn(num9):
                clicked_image = cue9


            if clicked_image is not None:

                click_result = (clicked_image == str(cor_resp))  # True if correct, False if incorrect


                continueRoutine = False
      End Routine:
        thisExp.addData('click_result', click_result)
    PolygonComponent Routine_4_Background
      fillColor = white
      shape = rectangle
      size = (2, 2)
      startVal [time (s)] = 0.0
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    ImageComponent nu_1
      image [set every repeat] = $cue1
      pos = (0.1, 0.3)
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
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    ImageComponent nu_2
      image [set every repeat] = $cue2
      pos = (-0.25, 0.3)
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
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    ImageComponent nu_3
      image [set every repeat] = $cue3
      pos = (-0.6, 0.3)
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
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    ImageComponent nu_4
      image [set every repeat] = $cue4
      pos = (0.1, 0)
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
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    ImageComponent nu_5
      image [set every repeat] = $cue5
      pos = (-0.25, 0)
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
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    ImageComponent nu_6
      image [set every repeat] = $cue6
      pos = (-0.6, 0)
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
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    ImageComponent nu_7
      image [set every repeat] = $cue7
      pos = (0.1, -0.3)
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
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    ImageComponent nu_8
      image [set every repeat] = $cue8
      pos = (-0.25, -0.3)
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
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    ImageComponent nu_9
      image [set every repeat] = $cue9
      pos = (-0.6, -0.3)
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
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    ImageComponent Target_4
      image [set every repeat] = $cue10
      pos = (0.6, 0)
      size = (0.35, 0.35)
      startVal [time (s)] = 0.0
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    MouseComponent mouse_resp_5
      clickable = nu_1, nu_2, nu_3, nu_4, nu_5, nu_6, nu_7, nu_8, nu_9
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      saveParamsClickable = image
      startVal [time (s)] = 0.0
      syncScreenRefresh = True
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  Routine end
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    PolygonComponent End_Background
      fillColor = white
      shape = rectangle
      size = (2, 2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      units = norm
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    ImageComponent Thank_You
      image = End.png
      size = (1, 1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      units = norm
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  Routine Feedback
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    PolygonComponent Feedback_Background
      fillColor = white
      shape = rectangle
      size = (2, 2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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    TextComponent feedback_text
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text [set every repeat] = $feedback_text
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Routine:
        correct_answer = Practice.thisTrial['correct_answer']
        response = None
        feedback_message = ""
      Each Frame:
        if mouse_resp.isPressedIn(num1):
            response = "num1"
        elif mouse_resp.isPressedIn(num2):
            response = "num2"
        elif mouse_resp.isPressedIn(num3):
            response = "num3"
        elif mouse_resp.isPressedIn(num4):
            response = "num4"
        elif mouse_resp.isPressedIn(num5):
            response = "num5"
        elif mouse_resp.isPressedIn(num6):
            response = "num6"
        elif mouse_resp.isPressedIn(num7):
            response = "num7"
        elif mouse_resp.isPressedIn(num8):
            response = "num8"
        elif mouse_resp.isPressedIn(num9):
            response = "num9"

        if response == correct_answer:
            feedback_message = "Correct!"
        else:
            feedback_message = "Incorrect!"

        if response:
            continueRoutine = False
      End Routine:
        feedback_text.setText(feedback_message)
  Routine FixCross
    RoutineSettingsComponent FixCross
      desc = 500 miliseconds fixation point
      forceNonSlip = True
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    CodeComponent code_time_fc
      Code Type = Auto->JS
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      Begin Routine:
        import random

        # تولید مدت زمان تصادفی بین 500 و 1000 میلی‌ثانیه (یعنی 0.5 تا 1.0 ثانیه)
        fixation_duration = random.uniform(0.5, 1.0)

        # ثبت در فایل خروجی
        thisExp.addData('fixation_duration', fixation_duration)
    TextComponent Fix_Cross_2
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.4
      startVal [time (s)] = 00
      stopVal [duration (s)] = $fixation_duration
      syncScreenRefresh = False
      text [set every repeat] = +
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  Routine blank
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    PolygonComponent Blank
      fillColor = white
      shape = rectangle
      size = (2,2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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  Routine instruction
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    PolygonComponent Instruction_Background
      fillColor = white
      shape = rectangle
      size = (2,2)
      startVal [time (s)] = 0.0
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    KeyboardComponent instruction_key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = first key
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  Routine instruct
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    PolygonComponent instruct_Background_2
      fillColor = white
      shape = rectangle
      size = (2, 2)
      startVal [time (s)] = 0.0
      units = norm
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    ImageComponent instruction_1
      image = instruct.jpg
      size = (1,1)
      startVal [time (s)] = 0.0
      units = norm
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    KeyboardComponent Space_Key_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine instruct
  Routine FC
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = Practice.xlsx
    loopType = fullRandom
    nReps = 1
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    conditions:
      [{'cue1': 'img109', 'cue2': 'img110', 'cue3': 'img111', 'cue4': 'img112', 'cue5': 'img113', 'cue6': 'img114', 'cue7': 'img115', 'cue8': 'img116', 'cue9': 'img117', 'cue10': 'img109', 'cor_resp': 'img109'},
      {'cue1': 'img110', 'cue2': 'img111', 'cue3': 'img112', 'cue4': 'img114', 'cue5': 'img116', 'cue6': 'img115', 'cue7': 'img113', 'cue8': 'img117', 'cue9': 'img109', 'cue10': 'img110', 'cor_resp': 'img110'},
      {'cue1': 'img111', 'cue2': 'img112', 'cue3': 'img113', 'cue4': 'img115', 'cue5': 'img117', 'cue6': 'img109', 'cue7': 'img110', 'cue8': 'img114', 'cue9': 'img116', 'cue10': 'img111', 'cor_resp': 'img111'},
      {'cue1': 'img117', 'cue2': 'img116', 'cue3': 'img115', 'cue4': 'img114', 'cue5': 'img113', 'cue6': 'img112', 'cue7': 'img111', 'cue8': 'img110', 'cue9': 'img109', 'cue10': 'img112', 'cor_resp': 'img112'},
      {'cue1': 'img109', 'cue2': 'img111', 'cue3': 'img113', 'cue4': 'img115', 'cue5': 'img117', 'cue6': 'img110', 'cue7': 'img112', 'cue8': 'img114', 'cue9': 'img116', 'cue10': 'img113', 'cor_resp': 'img113'}]
    Routine PracticeTrial
    Routine feedback
    Routine FixCross
  LoopTerminator trials
  Routine Space
  Routine FC
  LoopInitiator Loop1 loopType="TrialHandler"
    conditionsFile = first.xlsx
    loopType = fullRandom
    nReps = 1
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    conditions:
      [{'ID': 1, 'Target': 'img1', 'Emotion_Target': 'positive', 'Other_images': 'Negative', 'positive': 'img1,2,3,4,..,36', 'negative': 'img37,38,39,40,…,72', 'neutral': None, 'cue1': 'img42', 'cue2': 'img68', 'cue3': 'img54', 'cue4': 'img47', 'cue5': 'img1', 'cue6': 'img40', 'cue7': 'img65', 'cue8': 'img59', 'cue9': 'img38', 'cue10': 'img1', 'correct_answer': 'img1'},
      {'ID': 2, 'Target': 'img2', 'Emotion_Target': 'positive', 'Other_images': 'Negative', 'positive': 'img1,2,3,4,..,36', 'negative': 'img37,38,39,40,…,72', 'neutral': None, 'cue1': 'img55', 'cue2': 'img41', 'cue3': 'img37', 'cue4': 'img63', 'cue5': 'img72', 'cue6': 'img2', 'cue7': 'img45', 'cue8': 'img67', 'cue9': 'img61', 'cue10': 'img2', 'correct_answer': 'img2'},
      {'ID': 3, 'Target': 'img3', 'Emotion_Target': 'positive', 'Other_images': 'Negative', 'positive': 'img1,2,3,4,..,36', 'negative': 'img37,38,39,40,…,72', 'neutral': None, 'cue1': 'img46', 'cue2': 'img70', 'cue3': 'img39', 'cue4': 'img49', 'cue5': 'img66', 'cue6': 'img52', 'cue7': 'img57', 'cue8': 'img62', 'cue9': 'img3', 'cue10': 'img3', 'correct_answer': 'img3'},
      {'ID': 4, 'Target': 'img4', 'Emotion_Target': 'positive', 'Other_images': 'Negative', 'positive': 'img1,2,3,4,..,36', 'negative': 'img37,38,39,40,…,72', 'neutral': None, 'cue1': 'img43', 'cue2': 'img4', 'cue3': 'img48', 'cue4': 'img53', 'cue5': 'img64', 'cue6': 'img58', 'cue7': 'img60', 'cue8': 'img51', 'cue9': 'img56', 'cue10': 'img4', 'correct_answer': 'img4'}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
    Routine Routine_1
    Routine FixCross
  LoopTerminator Loop1
  Routine Space
  Routine FC
  LoopInitiator Loop2 loopType="TrialHandler"
    conditionsFile = second.xlsx
    loopType = fullRandom
    nReps = 1
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    conditions:
      [{'ID': 1.9, 'Target': 'img17', 'Emotion_Target': 'positive', 'Other_images': 'Negative', 'positive': 'img1,2,3,4,..,36', 'negative': 'img37,38,39,40,…,72', 'neutral': None, 'cue1': 'img48', 'cue2': 'img17', 'cue3': 'img72', 'cue4': 'img40', 'cue5': 'img66', 'cue6': 'img41', 'cue7': 'img67', 'cue8': 'img61', 'cue9': 'img47', 'cue10': 'img17', 'correct_answer': 'img17'},
      {'ID': 2.9, 'Target': 'img34', 'Emotion_Target': 'positive', 'Other_images': 'Negative', 'positive': 'img1,2,3,4,..,36', 'negative': 'img37,38,39,40,…,72', 'neutral': None, 'cue1': 'img64', 'cue2': 'img46', 'cue3': 'img49', 'cue4': 'img42', 'cue5': 'img51', 'cue6': 'img69', 'cue7': 'img70', 'cue8': 'img59', 'cue9': 'img34', 'cue10': 'img34', 'correct_answer': 'img34'},
      {'ID': 3.9, 'Target': 'img19', 'Emotion_Target': 'positive', 'Other_images': 'Negative', 'positive': 'img1,2,3,4,..,36', 'negative': 'img37,38,39,40,…,72', 'neutral': None, 'cue1': 'img43', 'cue2': 'img68', 'cue3': 'img45', 'cue4': 'img19', 'cue5': 'img71', 'cue6': 'img54', 'cue7': 'img38', 'cue8': 'img50', 'cue9': 'img56', 'cue10': 'img19', 'correct_answer': 'img19'},
      {'ID': 4.9, 'Target': 'img20', 'Emotion_Target': 'positive', 'Other_images': 'Negative', 'positive': 'img1,2,3,4,..,36', 'negative': 'img37,38,39,40,…,72', 'neutral': None, 'cue1': 'img44', 'cue2': 'img40', 'cue3': 'img61', 'cue4': 'img39', 'cue5': 'img65', 'cue6': 'img20', 'cue7': 'img57', 'cue8': 'img70', 'cue9': 'img48', 'cue10': 'img20', 'correct_answer': 'img20'}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
    Routine Routine_1
    Routine FixCross
  LoopTerminator Loop2
  Routine end
